PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = n-back teleoperation
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_stim1
      sound [set every repeat] = $number_audio_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine welcome
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press S to stat experiment
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    KeyboardComponent key_start
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bye
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Finished
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  Routine rest
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine block_break
    TextComponent przerwa
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Baseline
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  Routine threeback_meta
  Routine inst_one
    SoundComponent inst1
      sound = sounds/oneback.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine inst_three
    SoundComponent inst_3
      sound = sounds/threeback.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine welcome
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 3
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    conditions:
      [{'cond_file': 'teleoperation_oneback.xlsx'},
      {'cond_file': 'teleoperation_threeback .xlsx'}]
    Routine block_break
    LoopInitiator meta_oneback loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine inst_one
      LoopInitiator one_back loopType="TrialHandler"
        conditionsFile = teleoperation_oneback.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'number_audio_sound': 'sounds/1.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/2.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/3.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/4.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/5.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/6.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/7.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/8.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/9.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/0.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/1.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/2.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/3.wav', 'corr_answ': 1, 'difficulty': 1},
          {'number_audio_sound': 'sounds/4.wav', 'corr_answ': 1, 'difficulty': 1}]
        Routine trial
        Routine rest
      LoopTerminator one_back
    LoopTerminator meta_oneback
    Routine block_break
    LoopInitiator meta_threeback loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine inst_three
      LoopInitiator three_back loopType="TrialHandler"
        conditionsFile = teleoperation_threeback .xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'number_audio_sound': 'sounds/5.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/6.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/7.wav', 'corr_answ': 1, 'level': 3},
          {'number_audio_sound': 'sounds/8.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/1.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/2.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/3.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/4.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/2.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/0.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/9.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/7.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/2.wav', 'corr_answ': 0, 'level': 3},
          {'number_audio_sound': 'sounds/5.wav', 'corr_answ': 0, 'level': 3}]
        Routine trial
        Routine rest
      LoopTerminator three_back
    LoopTerminator meta_threeback
  LoopTerminator blocks
  Routine bye
